20141112_113439 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Genescript 96DWP;1011Q1
1,1;Genescript 96DWP;1011Q2
1,2;Genescript 96DWP;0901G1
7,0;Genescript 96DWP;0903H1
7,1;Genescript 96DWP;0903H2
7,2;Genescript 96DWP;0809L2
13,0;Genescript 96DWP;1111AB3
13,1;Genescript 96DWP;1016N2
19,0;Wash Station Cleaner shallow
19,1;Wash Station Waste
19,2;Wash Station Cleaner deep
20,0;Genescript Tube Epp 16 Pos;dst1
21,0;Genescript Tube Epp 16 Pos;dst2
22,0;Genescript Tube Epp 16 Pos;dst3
23,0;Genescript Tube Epp 16 Pos;dst4
24,0;Genescript Tube Epp 16 Pos;dst5
25,0;Genescript Tube Epp 16 Pos;dst6
26,0;Genescript Tube Epp 16 Pos;dst7
27,0;Genescript Tube Epp 16 Pos;dst8
28,0;Genescript Tube Epp 16 Pos;dst9
29,0;Genescript Tube Epp 16 Pos;dst10
30,0;Genescript Tube Epp 16 Pos;dst11
31,0;Genescript Tube Epp 16 Pos;dst12
32,0;Genescript Tube Epp 16 Pos;dst13
33,0;Genescript Tube Epp 16 Pos;dst14
34,0;Genescript Tube Epp 16 Pos;dst15
35,0;Genescript Tube Epp 16 Pos;dst16
36,0;Genescript Tube Epp 16 Pos;dst17
37,0;Genescript Tube Epp 16 Pos;dst18
38,0;Genescript Tube Epp 16 Pos;dst19
39,0;Genescript Tube Epp 16 Pos;dst20
40,0;Genescript Tube Epp 16 Pos;dst21
41,0;Genescript Tube Epp 16 Pos;dst22
42,0;Genescript Tube Epp 16 Pos;dst23
43,0;Genescript Tube Epp 16 Pos;dst24
44,0;Genescript Tube Epp 16 Pos;dst25
45,0;Genescript Tube Epp 16 Pos;dst26
1;System
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--{ RPG }--
Execute("C:\pooling\genscript.bat",2,"",2);
ImportVariable(plate_cnt,"C:\pooling\Data\Outputs\fileCnt.txt",0,"4",0,1,0,1,0);
ImportVariable(isResultOk,"C:\pooling\Data\Outputs\result.txt",1,"false",0,1,0,1,0);
If("plate_cnt",0,"1","Pipette the 1,2 plates ");
If("plate_cnt",0,"2","Pipette the 3,4 plates ");
If("plate_cnt",0,"3","Pipette the 5,6 plates ");
If("plate_cnt",0,"4","Pipette the 7,8 plates ");
IfThen("isResultOk",1,"true");
UserPrompt("Error happened in generating worklist.",0,-1);
Comment("error happened!");
EndScript(0);
Else();
EndIf();
Comment("Pipette the 7,8 plates ");
Worklist Import("C:\pooling\Data\Outputs\4.csv","C:\pooling\Data\Outputs\output.gwl","0","Genescript 96DWP","Genescript Tube Epp 16 Pos",1,5,0,259,516,775,1032,1,0,0,0);
Worklist(0,C:\pooling\Data\Outputs\output.gwl,255,"Genescript  Primer wet contact",0,0);Wash(255,19,1,19,0,"1",500,"1",500,10,70,30,1,0,1000,0);GetDITI2(0,"DiTi 200ul LiHa",0,0,10,70);DropDITI(0,-1,0,10,70,0);
Comment("Pipette the 5,6 plates ");
Worklist Import("C:\pooling\Data\Outputs\3.csv","C:\pooling\Data\Outputs\output.gwl","0","Genescript 96DWP","Genescript Tube Epp 16 Pos",1,5,0,259,516,775,1032,1,0,0,0);
Worklist(0,C:\pooling\Data\Outputs\output.gwl,255,"Genescript  Primer wet contact",0,0);Wash(255,19,1,19,0,"1",500,"1",500,10,70,30,1,0,1000,0);GetDITI2(0,"DiTi 200ul LiHa",0,0,10,70);DropDITI(0,-1,0,10,70,0);
Worklist(1,,0,"",0,0);Wash(255,19,1,19,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);GetDITI2(0,"DiTi 200ul LiHa",0,0,10,70);DropDITI(0,-1,0,10,70,0);
Comment("Pipette the 3,4 plates ");
Worklist Import("C:\pooling\Data\Outputs\2.csv","C:\pooling\Data\Outputs\output.gwl","0","Genescript 96DWP","Genescript Tube Epp 16 Pos",1,5,0,259,516,775,1032,1,0,0,0);
Worklist(0,C:\pooling\Data\Outputs\output.gwl,255,"Genescript  Primer wet contact",0,0);Wash(255,19,1,19,0,"1",500,"1",500,10,70,30,1,0,1000,0);GetDITI2(0,"DiTi 200ul LiHa",0,0,10,70);DropDITI(0,-1,0,10,70,0);
Worklist(1,,0,"",0,0);Wash(255,19,1,19,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);GetDITI2(0,"DiTi 200ul LiHa",0,0,10,70);DropDITI(0,-1,0,10,70,0);
Comment("Pipette the 1,2 plates ");
Worklist Import("C:\pooling\Data\Outputs\1.csv","C:\pooling\Data\Outputs\output.gwl","0","Genescript 96DWP","Genescript Tube Epp 16 Pos",1,5,0,259,516,775,1032,1,0,0,0);
Worklist(0,C:\pooling\Data\Outputs\output.gwl,255,"Genescript  Primer wet contact",0,0);Wash(255,19,1,19,0,"1",500,"1",500,10,70,30,1,0,1000,0);GetDITI2(0,"DiTi 200ul LiHa",0,0,10,70);DropDITI(0,-1,0,10,70,0);
Worklist(1,,0,"",0,0);Wash(255,19,1,19,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);GetDITI2(0,"DiTi 200ul LiHa",0,0,10,70);DropDITI(0,-1,0,10,70,0);
